PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = SelectiveAttentionTest
  keyboardBackend = ioHub
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Routines
  Routine Intro
    TextComponent IntroText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Velkommen til Opmærksomheds testen.

        Du vil blive præsenteret for bogstaver
        hold øje med b og p.
        En af dem vil være i højre eller venstre side af skærmen.
        Hvis du ser p klik til venstre på musen
        Hvis du ser b klik til højre på musen
        Klik når skærmen bliver sort

        god fornøjelse
    KeyboardComponent next_screen1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixationCross
    TextComponent FixationCrossText
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = X
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  Routine VisualDistractorStimuli
    CodeComponent TrialController
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
      Begin Experiment:
        # setup variables to control the experiment
        distractorPos = (0.0,0.3)
        filler_up_left_pos = (-0.15,0.1)
        filler_low_left_pos = (-0.15,-0.1)
        filler_low_right_pos = (0.15,-0.1)
        filler_up_right_pos = (0.15,0.1)
        allowedBNeutral = 2;
        allowedBIncongruence = 2;
        allowedBCongruence = 2;
        allowedPNeutral = 2;
        allowedPIncongruence = 2;
        allowedPCongruence = 2;
        targetletter = 'g';


        #Default positions
        p_targetpos = (1,1)
        b_targetpos = (1,1)
        p_distractorpos = (1,1)
        b_distractorpos = (1,1)
        g_distractorpos = (1,1)
        h_fillerpos = (1,1)
        l_fillerpos = (1,1)
        y_fillerpos = (1,1)
      Begin Routine:
        p_targetpos = (1,1)
        b_targetpos = (1,1)
        p_distractorpos = (1,1)
        b_distractorpos = (1,1)
        g_distractorpos = (1,1)
        h_fillerpos = (1,1)
        l_fillerpos = (1,1)
        y_fillerpos = (1,1)

        def FindTargetAndDistractor(allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral):
            tar = np.random.choice(targets);
            tarAndDist = FindDistractor(tar, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral);
            return tarAndDist;

        def FindDistractor(target, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral):

            dist = np.random.choice(distractors);
            if target == 'p' and dist == 'p' and allowedPCongruence > 0:
                allowedPCongruence = allowedPCongruence -1;
                thisExp.addData('Condition', 'Congruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'p' and dist == 'b' and allowedPIncongruence > 0:
                allowedPIncongruence = allowedPIncongruence -1;
                thisExp.addData('Condition', 'Incongruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'p' and dist == 'g' and allowedPNeutral > 0:
                allowedPNeutral = allowedPNeutral -1;
                thisExp.addData('Condition', 'Neutral')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'p' and allowedBCongruence > 0:
                allowedBCongruence = allowedBCongruence -1;
                thisExp.addData('Condition', 'Congruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'b' and allowedBIncongruence > 0:
                allowedBIncongruence = allowedBIncongruence -1;
                thisExp.addData('Condition', 'Incongruent')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            elif target == 'b' and dist == 'g' and allowedBNeutral > 0:
                allowedBNeutral = allowedBNeutral -1;
                thisExp.addData('Condition', 'Neutral')
                return target, dist, allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral;
            else:
               return FindDistractor(np.random.choice(targets), allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral);

        # setup variables to control the experiment
        targets = ['p','b'];
        distractors = ['p','b','g'];
        fillers = ['h','l','y'];
        fillerposes = ['upLeft', 'lowLeft', 'upRight', 'lowRight'];
        targetpos = (1,1);

        # Setup scene
        # Find the target position
        targetposName = np.random.choice(fillerposes)
        if targetposName == 'upLeft':
            targetpos = filler_up_left_pos;
        elif targetposName == 'lowLeft':
            targetpos = filler_low_left_pos;
        elif targetposName == 'upRight':
            targetpos = filler_up_right_pos;
        elif targetposName == 'lowRight':
            targetpos = filler_low_right_pos;
        fillerposes.remove(targetposName);
        # find which will be the target and which will be the distractor
        targetAndDistractor = FindTargetAndDistractor(allowedPCongruence, allowedPIncongruence, allowedPNeutral, allowedBCongruence, allowedBIncongruence, allowedBNeutral)

        target = targetAndDistractor[0];
        distractor = targetAndDistractor[1];

        allowedPCongruence = targetAndDistractor[2]
        allowedPIncongruence = targetAndDistractor[3]
        allowedPNeutral = targetAndDistractor[4]
        allowedBCongruence = targetAndDistractor[5]
        allowedBIncongruence = targetAndDistractor[6]
        allowedBNeutral = targetAndDistractor[7]

        targetletter = target;

        if target == 'p':
            p_targetpos = targetpos
        elif target == 'b':
            b_targetpos = targetpos

        if distractor == 'p':
            p_distractorpos = distractorPos
        elif distractor == 'b':
            b_distractorpos = distractorPos
        elif distractor == 'g':
            g_distractorpos = distractorPos
        # Randomly place the fillers

        np.random.shuffle(fillerposes);
        np.random.shuffle(fillers);
        index = (0,1,2)

        for i in index:
                if fillerposes[i] == 'upLeft' and fillers[i] == 'h':
                    h_fillerpos = filler_up_left_pos;
                if fillerposes[i] == 'upLeft' and fillers[i] == 'l':
                    l_fillerpos = filler_up_left_pos;
                if fillerposes[i] == 'upLeft' and fillers[i] == 'y':
                    y_fillerpos = filler_up_left_pos;

                if fillerposes[i] == 'lowLeft' and fillers[i] == 'h':
                    h_fillerpos = filler_low_left_pos;
                if fillerposes[i] == 'lowLeft' and fillers[i] == 'l':
                    l_fillerpos = filler_low_left_pos;
                if fillerposes[i] == 'lowLeft' and fillers[i] == 'y':
                    y_fillerpos = filler_low_left_pos;

                if fillerposes[i] == 'lowRight' and fillers[i] == 'h':
                    h_fillerpos = filler_low_right_pos;
                if fillerposes[i] == 'lowRight' and fillers[i] == 'l':
                    l_fillerpos = filler_low_right_pos;
                if fillerposes[i] == 'lowRight' and fillers[i] == 'y':
                    y_fillerpos = filler_low_right_pos;

                if fillerposes[i] == 'upRight' and fillers[i] == 'h':
                    h_fillerpos = filler_up_right_pos;
                if fillerposes[i] == 'upRight' and fillers[i] == 'l':
                    l_fillerpos = filler_up_right_pos;
                if fillerposes[i] == 'upRight' and fillers[i] == 'y':
                    y_fillerpos = filler_up_right_pos;
    TextComponent p_Target
      color = -1.0000, -1.0000, -1.0000
      font [set every repeat] = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = p_targetpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = p
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    TextComponent b_Target
      color = -1.0000, -1.0000, -1.0000
      font [set every repeat] = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = b_targetpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = b
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    TextComponent p_Distractor
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = p_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = p
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    TextComponent b_Distractor
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = b_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = b
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    TextComponent g_Distractor
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = g_distractorpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = g
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    TextComponent h_Filler
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = h_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = h
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    TextComponent l_Filler
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = l_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = l
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    TextComponent y_filler
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.08
      pos [set every repeat] = y_fillerpos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = y
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    CodeComponent recordAttentionReaction
      Code Type = Auto->JS
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      Begin Experiment:
        isItP = False;
        isItB = False;
        enableSadface = False;
        enableHappyface = False;
        enableFaster = False;
      Begin Routine:
        enableHappyface = False;
        enableSadface = False;
        enableFaster = False;

        if targetletter == 'p':
            isItP = True;
            isItB = False;

        if targetletter == 'b':
            isItB = True;
            isItP = False;
      Each Frame:
        #button[0] = left click = P
        #button[2] = right click = B

        buttons = mouse.getPressed()

        if isItP and buttons[0] == 1:
            enableHappyface = True;
            enableSadface = False;
            enableFaster = False;
        elif isItB and buttons[2] == 1:
            enableHappyface = True;
            enableSadface = False;
            enableFaster = False;
        elif isItP and buttons[2] == 1:
            enableHappyface = False;
            enableSadface = True;
            enableFaster = False;
        elif isItB and buttons[0] == 1:
            enableHappyface = False;
            enableSadface = True;
            enableFaster = False;
      End Routine:
        if enableHappyface == False and enableSadface == False:
            enableFaster = True;

        if enableHappyface == True:
            thisExp.addData('Response', 'Correct')
            thisExp.addData('Response_code', 1.0)

        if enableSadface == True:
            thisExp.addData('Response', 'Incorrect')
            thisExp.addData('Response_code', 2.0)

        if enableFaster == True:
            thisExp.addData('Response', 'None')
            thisExp.addData('Response_code', 0.0)
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.5
      timeRelativeTo = routine
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    ImageComponent whiteimage
      color = 1.0000, 1.0000, 1.0000
      image = graphic/black.png
      size = (1, 1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.5
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  Routine Feedback
    CodeComponent ShowFeedback
      Code Type = Auto->JS
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      Begin Experiment:
        fasterOpacity = 0.0;
        sadOpacity = 0.0;
        happyOpacity = 0.0;
      Begin Routine:
        #from the previous routine feedback will be provided.
        if enableHappyface:
            fasterOpacity = 0.0;
            sadOpacity = 0.0;
            happyOpacity = 1.0;

        if enableSadface:
            fasterOpacity = 0.0;
            sadOpacity = 1.0;
            happyOpacity = 0.0;

        if enableFaster:
            fasterOpacity = 1.0;
            sadOpacity = 0.0;
            happyOpacity = 0.0;
    TextComponent Faster
      color = -1.0000, -1.0000, -1.0000
      font = Open Sans ExtraBold
      letterHeight = 0.07
      opacity [set every repeat] = fasterOpacity
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Hurtigere
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    ImageComponent happy
      image = graphic/happyface.png
      opacity [set every repeat] = happyOpacity
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent sad
      image = graphic/sadface.png
      opacity [set every repeat] = sadOpacity
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine Intro
  LoopInitiator VisualDistractionTrials loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine FixationCross
    Routine VisualDistractorStimuli
    Routine Feedback
  LoopTerminator VisualDistractionTrials
